PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001', 'training': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1680, 1050]
  color = $[1,1,1]
  expName = SST
  keyboardBackend = ioHub
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Routines
  Routine TEST
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $ssd *1000
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  Routine FEEDBACK
    CodeComponent feedback_code
      Code Type = Py
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      Begin Experiment:
        # Feedback Routine:
        # This routine provides feedback to participants based on their responses in the trial.
        # It displays messages corresponding to their performance, differentiating between
        # correct, incorrect, too fast, too slow, and stop-signal responses.

        # Define the feedback messages for various response outcomes.
        msg = ""  # Initializes the message variable to be empty
        correct_msg = 'Correct'  # Message displayed for correct responses in Go trials
        incorrect_msg = 'Oops'  # Message for incorrect responses
        too_slow_msg = 'Too slow'  # Message when response is slower than expected
        too_fast_msg = 'Too fast'  # Message when response is faster than expected
        correct_stop_msg = 'Perfect stop'  # Message for successful inhibition in a Stop trial
        incorrect_stop_msg = 'You must Stop!'  # Message when failing to inhibit in a Stop trial
      Begin Routine:
        # Determines the feedback message based on the trial type and response characteristics.
        if signal == 0:  # For Go trials
            if key_resp.keys is not None:  # If there was a response
                if key_resp.rt <= StopSignal_start - 0.05:
                    msg = too_fast_msg  # If response is premature
                elif key_resp.corr == 1:
                    msg = correct_msg  # If response is correct
                elif key_resp.corr == 0:
                    msg = incorrect_msg  # If response is incorrect
                elif key_resp.rt >= (StopSignal_start - 0.05 + ssd):
                    msg = too_slow_msg  # If response is too slow
            else:
                msg = too_slow_msg  # If no response, considered too slow
        elif signal == 1:  # For Stop trials
            if key_resp.keys is not None:
                msg = incorrect_stop_msg  # If there was a response, it's incorrect (failed to stop)
            else:
                msg = correct_stop_msg  # If no response, it's a perfect stop
    TextComponent feedback_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg
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  Routine TRIAL_SST
    CodeComponent ssd_code
      Code Type = Py
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      Begin Experiment:
        # Trial Routine:
        # This routine manages the sequence of events in a single trial, including
        # handling stop signals, recording response times, and adjusting stop-signal delays.

        # Hides the mouse cursor for the duration of the experiment to avoid distractions.
        event.Mouse(visible=False)

        # The predefined timing for the interval between the Go signal and the Stop signal start.
        StopSignal_start = 0.95  # Stop signal starts at 950 ms after the Go signal

        # Initial Stop Signal Delay (SSD) set to 150 milliseconds.
        ssd = 0.15
        ssd_1 = 0.15
        ssd_2 = 0.15
      Begin Routine:
        # Records the SSD at the beginning of each trial in milliseconds.
        thisExp.addData("SSD", ssd * 1000)  # SSD is stored in milliseconds
      End Routine:
        # Code to log and handle premature responses.
        if key_resp.rt:  # Checks if there was a response
            if signal == 1:  # For Stop trials
                # Checks if the response was made before the sum of StopSignal was presented
                if key_resp.rt <= (StopSignal_start + ssd):
                    thisExp.addData("premature", 1)  # Logs response as premature
                else:
                    thisExp.addData("premature", 0)  # Logs response as not premature
            elif signal == 0:  # For Go trials
                # Checks if the response was made before the Go signal was fully presented
                if key_resp.rt <= (StopSignal_start):
                    thisExp.addData("premature", 1)
                else:
                    thisExp.addData("premature", 0)

        # Calculates and logs the Reaction Time (RT) from the end of the Go signal to the response.
        if key_resp.rt:
            rt = (key_resp.rt - StopSignal_start) * 1000  # Converts seconds to milliseconds
            thisExp.addData("RT", rt)

        # Dynamic SSD adjustment:
        # Adjusts the SSD based on the participant's performance in Stop trials.
        if signal == 1:
            if len(key_resp.keys) > 0:  # If the participant responded
                ssd -= 0.050  # Decreases SSD by 50 ms to make stopping easier next time
                if ssd <= 0.050:  # Ensures SSD doesn't go below 50 ms
                    ssd = 0.050
            else:  # If the participant did not respond
                ssd += 0.050  # Increases SSD by 50 ms to make stopping harder next time
                if ssd >= 0.650:  # Ensures SSD doesn't exceed 650 ms
                    ssd = 0.650
    ImageComponent dot_img
      image = images/fix.png
      size = (2,2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      units = norm
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    ImageComponent go_img
      image [set every repeat] = $"images/" + go_file
      size = (2,2)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.1
      units = norm
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    ImageComponent stop_img
      image [set every repeat] = $"images/"  + stop_file
      size = (2,2)
      startVal [time (s)] = $StopSignal_start + ssd
      stopVal [duration (s)] = 0.07
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
      store = first key
      storeCorrect = True
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    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
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  Routine BREAK
    CodeComponent break_code
      Code Type = Py
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      Begin Routine:
        # Break Between Blocks Code:
        # This code controls the transition between blocks of trials. Specifically, it
        # checks the current block number and skips the break if it's the last block,
        # allowing the experiment to proceed directly to the concluding routine.

        # Check if the current block is the last block in the experiment.
        # Loop_blocchi.thisRepN returns the zero-based index of the current repetition,
        # so we compare it against (nb_loop_blocks - 1) which is the index of the last block.
        if Loop_blocchi.thisRepN == (nb_loop_blocks - 1):
            Loop_blocchi.finished = True  # Ends the loop after the current block finishes
            continueRoutine = False  # Immediately ends the current routine to skip the break
    TextComponent break_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Pause.

        Press 'space' to continue.
    KeyboardComponent break_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine BEGIN_EXP
    TextComponent begin_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Training is finished.

        You will begin the expreriment. From now, you will not receive any feedback.

        Press 'space' to begin
    KeyboardComponent begin_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine INFO
    CodeComponent MIT_licence
      Code Type = Py
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      Before Experiment:
        # MIT License
        #
        # Copyright (c) [2014] [Thomas Quettier]
        #
        # Permission is hereby granted, free of charge, to any person obtaining a copy
        # of this software and associated documentation files (the "Software"), to deal
        # in the Software without restriction, including without limitation the rights
        # to use, copy, modify, merge, publish, distribute, sublicense, and/or sell
        # copies of the Software, and to permit persons to whom the Software is
        # furnished to do so, subject to the following conditions:
        #
        #   The above copyright notice and this permission notice shall be included in all
        # copies or substantial portions of the Software.
        #
        # THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND, EXPRESS OR
        # IMPLIED, INCLUDING BUT NOT LIMITED TO THE WARRANTIES OF MERCHANTABILITY,
        # FITNESS FOR A PARTICULAR PURPOSE AND NONINFRINGEMENT. IN NO EVENT SHALL THE
        # AUTHORS OR COPYRIGHT HOLDERS BE LIABLE FOR ANY CLAIM, DAMAGES OR OTHER
        # LIABILITY, WHETHER IN AN ACTION OF CONTRACT, TORT OR OTHERWISE, ARISING FROM,
        # OUT OF OR IN CONNECTION WITH THE SOFTWARE OR THE USE OR OTHER DEALINGS IN THE
        # SOFTWARE.
        #
        # Additional Note:
        #   While not legally binding, the author would appreciate an acknowledgment or citation
        # where possible if this software is used in the development of new software, publications,
        # or research. For citation guidelines, please refer to the CITATION file in this repository.
    CodeComponent setting_code
      Code Type = Py
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      Begin Experiment:
        # This section sets essential parameters for the experiment based on user input
        # and predefined settings. These parameters determine the number of trials and blocks,
        # include optional training, and set the duration between trials.

        # Number of blocks to loop through in the experiment
        nb_loop_blocks = 4 # default 4

        # Number of trials per block. Each block contains 16 trials,
        # cumulatively 128 trials across all blocks with a distribution of
        # 32 stop trials and 96 go trials (stop:go ratio = 1:4 please refer to the conditions.xlsx file)
        nb_loop_trial = 16  # default 16
        # 16 trials per block x 8 blocks = 128 total trials

        # Inter-Trial Interval (ITI): This is the time delay between the end of one trial
        # and the start of the next trial, set to 1.6 seconds
        iti = 1.6

        # Training flag obtained from the experiment info dialogue box:
        # '1' means the experiment includes a training phase,
        # '0' means the training phase is skipped
        nb_training = expInfo['training']
    TextComponent info_txt
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Your task will be to respond to the green arrow that will appear on the screen.

        In some trials, immediately after the arrow, the letters "XX" will appear. In this case, your task will be NOT to press the key, thus stopping your response.

        Sometimes it will be very easy to stop, other times more difficult, because the test adapts to your performance.

        Attention! We ask you not to wait for the appearance of the stimulus, but to respond as quickly and accurately as possible. Don't worry about making mistakes, the test will adapt.

        Press 'space' to continue
    KeyboardComponent info_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ISTRUCTIONS
    TextComponent istr_txt
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        It is still very important that you respond as QUICKLY and ACCURATELY as possible.

        The experiment lasts about 20 minutes.
        The experiment consists of a practice block and 4 experimental blocks. During the practice block, you will receive feedback on your performance ("too slow", "correct stop").

        Between each block, there will be an opportunity for a short break.

        Press 'space' to begin
    KeyboardComponent istr_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine THANKS
    TextComponent thanks_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for your time.
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    KeyboardComponent thanks_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    TextComponent iti_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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  Routine PREPROCESSING
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import pandas as pd
        import numpy as np
      Begin Routine:
        thisExp.saveAsWideText('data/temp.csv', delim='auto')

        data = pd.read_csv("data/temp.csv", sep=",", header=0)

        # Filter rows where 'Loop_blocchi.thisRepN' is greater than or equal to 0
        data = data[data['Loop_blocchi.thisRepN'] >= 0]

        # Convert necessary columns to categorical type and perform calculations
        data['subject'] = pd.Categorical(data['participant'])
        data['go_file'] = pd.Categorical(data['go_file'])
        data['stop_file'] = pd.Categorical(data['stop_file'])
        data['correct_key'] = pd.Categorical(data['correct_key'])
        data['signal'] = pd.Categorical(data['signal'])
        data['response'] = pd.Categorical(data['key_resp.keys'])

        # Conditionally fill the SSD column based on signal type
        data['SSD'] = np.where(data['signal'] == '0', np.nan, data['SSD'])

        # Calculate real SSD values by converting event timestamps to milliseconds and rounding
        data['SSD.real'] = round((data['stop_img.stopped'].astype(float) - data['go_img.stopped'].astype(float)) * 1000, 0)

        # Include extra columns as specified
        data['congruent'] = data['key_resp.corr']
        data['premature'] = data['premature']
        data['rt'] = data['RT']
        data['bloch'] = data['Loop_blocchi.thisRepN'] + 1
        data['trial'] = data['loop_trials.thisN'] + 1

        # Select only the specified columns
        data = data[['subject', 'go_file', 'stop_file', 'correct_key', 'signal', 'SSD', 'premature', 'bloch', 'trial', 'response', 'congruent', 'rt']]




        # Create a filename based on the participant's ID
        # Ensure that 'participant' is correctly keyed in your expInfo dictionary
        participant_id = expInfo['participant']  # Replace 'participant' if the key differs
        filename = f"data/processed_data_participant_{participant_id}.xlsx"

        # Save the processed data to an Excel file with the participant-specific filename
        data.to_excel(filename, index=False)
Flow
  Routine INFO
  Routine ISTRUCTIONS
  LoopInitiator Loop_practice loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = nb_training
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    conditions:
      [{'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correct_key': 'left', 'signal': 0},
      {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correct_key': 'right', 'signal': 0},
      {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correct_key': 'left', 'signal': 0},
      {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correct_key': 'right', 'signal': 0},
      {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correct_key': 'left', 'signal': 0},
      {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correct_key': 'right', 'signal': 0},
      {'go_file': 'go_left.png', 'stop_file': 'stop.jpg', 'correct_key': 'left', 'signal': 1},
      {'go_file': 'go_right.png', 'stop_file': 'stop.jpg', 'correct_key': 'right', 'signal': 1}]
    Routine TRIAL_SST
    Routine FEEDBACK
    Routine ITI
  LoopTerminator Loop_practice
  LoopInitiator Loop_begin loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = nb_training
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    Routine BEGIN_EXP
  LoopTerminator Loop_begin
  LoopInitiator Loop_blocchi loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = nb_loop_blocks
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    LoopInitiator loop_trials loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = fullRandom
      nReps = nb_loop_trial
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      conditions:
        [{'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correct_key': 'left', 'signal': 0},
        {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correct_key': 'right', 'signal': 0},
        {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correct_key': 'left', 'signal': 0},
        {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correct_key': 'right', 'signal': 0},
        {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correct_key': 'left', 'signal': 0},
        {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correct_key': 'right', 'signal': 0},
        {'go_file': 'go_left.png', 'stop_file': 'stop.jpg', 'correct_key': 'left', 'signal': 1},
        {'go_file': 'go_right.png', 'stop_file': 'stop.jpg', 'correct_key': 'right', 'signal': 1}]
      Routine TRIAL_SST
      Routine ITI
    LoopTerminator loop_trials
    Routine BREAK
  LoopTerminator Loop_blocchi
  Routine THANKS
