PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001', 'training': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1680, 1050]
  color = $[1,1,1]
  expName = SST
  keyboardBackend = ioHub
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Routines
  Routine TEST
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $ssd *1000
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  Routine FEEDBACK
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        correct_msg = 'Correct'
        incorrect_msg = 'Oops'
        too_slow_msg = 'To slow'
        too_fast_msg = 'To fast'
        correct_stop_msg = 'Perferfect stop'
        incorrect_stop_msg = 'You must Stop !'
        msg = ""
      Begin Routine:
        if signal == 0:
            if key_resp.keys is not None:
                if key_resp.rt <= go_start :
                    msg = too_fast_msg
                elif key_resp.corr == 1:
                    msg = correct_msg
                elif key_resp.corr == 0:
                    msg = incorrect_msg
                elif key_resp.rt >= stop_start:
                    msg = too_slow_msg
            else:
                msg = too_slow_msg
        elif signal == 1:
            if key_resp.keys is not None:
                msg = incorrect_stop_msg
            else:
                msg = correct_stop_msg
    TextComponent feedback_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg
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  Routine TRIAL_SST
    CodeComponent ssd_code
      Code Type = Auto->JS
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      Begin Experiment:
        event. Mouse(visible=False)

        # setting stt durations (psychopy needs sec)
        dot_dur = 0.800
        blank_dur = 1.6
        go_dur = 0.1
        stop_dur = 0.07


        #ssd set to 150 and min 50 max 650
        ssd_1 = 0.150
        ssd_2 = 0.15
        ssd = 0.15

        # setting sst timing presentation
        dot_start = 0
        blank_start = dot_dur
        go_start = blank_start + blank_dur
        stop_start = go_start + go_dur # + ssd in stop_img component


        full_dur = stop_start + stop_dur + 0.800
      Begin Routine:
        thisExp.addData("SSD", ssd*1000)
      End Routine:
        if signal == 1:
            if len(key_resp.keys) > 0:
                ssd_1 = ssd_1 - 0.050
                if ssd_1 <= 0.050:
                    ssd_1 = 0.050
            else:
                ssd_1 = ssd_1 + 0.050
                if ssd_1 >= 0.650:
                    ssd_1 = 0.650
    ImageComponent dot_img
      image = images/fix.png
      size = (2,2)
      startVal [time (s)] = dot_start
      stopVal [duration (s)] = dot_dur
      units = norm
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    TextComponent blank_txt
      letterHeight = 0.05
      startVal [time (s)] = blank_start
      stopVal [duration (s)] = blank_dur
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    ImageComponent go_img
      image [set every repeat] = $"images/" + go_file
      saveStartStop = False
      size = (2,2)
      startVal [time (s)] = $go_start
      stopVal [duration (s)] = $go_dur
      units = norm
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    ImageComponent stop_img
      image [set every repeat] = $"images/"  + stop_file
      size = (2,2)
      startVal [time (s)] = $go_start + ssd
      stopVal [duration (s)] = $stop_dur
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $correct_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $full_dur
      store = first key
      storeCorrect = True
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  Routine BREAK
    CodeComponent break_code
      Code Type = Auto->JS
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      Begin Routine:
        if Loop_blocchi.thisRepN == (nb_blocks -1):
            Loop_blocchi.finished = True
            continueRoutine = False
    TextComponent break_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Pause.

        Press 'space' to continue.
    KeyboardComponent break_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine BEGIN_EXP
    TextComponent begin_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Training is finished.

        You will begin the expreriment. From now, you will not receive any feedback.

        Press 'space' to begin
    KeyboardComponent begin_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine INFO
    CodeComponent MIT_licence
      Code Type = Auto->JS
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      Before Experiment:
        # MIT License
        #
        # Copyright (c) [2014] [Thomas Quettier]
        #
        # Permission is hereby granted, free of charge, to any person obtaining a copy
        # of this software and associated documentation files (the "Software"), to deal
        # in the Software without restriction, including without limitation the rights
        # to use, copy, modify, merge, publish, distribute, sublicense, and/or sell
        # copies of the Software, and to permit persons to whom the Software is
        # furnished to do so, subject to the following conditions:
        #
        #   The above copyright notice and this permission notice shall be included in all
        # copies or substantial portions of the Software.
        #
        # THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND, EXPRESS OR
        # IMPLIED, INCLUDING BUT NOT LIMITED TO THE WARRANTIES OF MERCHANTABILITY,
        # FITNESS FOR A PARTICULAR PURPOSE AND NONINFRINGEMENT. IN NO EVENT SHALL THE
        # AUTHORS OR COPYRIGHT HOLDERS BE LIABLE FOR ANY CLAIM, DAMAGES OR OTHER
        # LIABILITY, WHETHER IN AN ACTION OF CONTRACT, TORT OR OTHERWISE, ARISING FROM,
        # OUT OF OR IN CONNECTION WITH THE SOFTWARE OR THE USE OR OTHER DEALINGS IN THE
        # SOFTWARE.
        #
        # Additional Note:
        #   While not legally binding, the author would appreciate an acknowledgment or citation
        # where possible if this software is used in the development of new software, publications,
        # or research. For citation guidelines, please refer to the CITATION file in this repository.
    CodeComponent setting_code
      Code Type = Auto->JS
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      Begin Experiment:
        nb_blocks = 4
        nb_training = expInfo['training']
    TextComponent info_txt
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Your task will be to respond to the green arrow that will appear on the screen.

        In some trials, immediately after the arrow, the letters "XX" will appear. In this case, your task will be NOT to press the key, thus stopping your response.

        Sometimes it will be very easy to stop, other times more difficult, because the test adapts to your performance.

        Attention! We ask you not to wait for the appearance of the stimulus, but to respond as quickly and accurately as possible. Don't worry about making mistakes, the test will adapt.

        Press 'space' to continue
    KeyboardComponent info_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ISTRUCTIONS
    TextComponent istr_txt
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        It is still very important that you respond as QUICKLY and ACCURATELY as possible.

        The experiment lasts about 20 minutes.
        The experiment consists of a practice block and 4 experimental blocks. During the practice block, you will receive feedback on your performance ("too slow", "correct stop").

        Between each block, there will be an opportunity for a short break.

        Press 'space' to begin
    KeyboardComponent istr_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine THANKS
    TextComponent thanks_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for your time.
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    KeyboardComponent thanks_kb
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine INFO
  Routine ISTRUCTIONS
  LoopInitiator Loop_practice loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = nb_training
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    conditions:
      [{'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correctkey': 'left', 'signal': 0},
      {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correctkey': 'right', 'signal': 0},
      {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correctkey': 'left', 'signal': 0},
      {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correctkey': 'right', 'signal': 0},
      {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correctkey': 'left', 'signal': 0},
      {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correctkey': 'right', 'signal': 0},
      {'go_file': 'go_left.png', 'stop_file': 'stop_1.png', 'correctkey': 'left', 'signal': 1},
      {'go_file': 'go_right.png', 'stop_file': 'stop_1.png', 'correctkey': 'right', 'signal': 1},
      {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correctkey': 'left', 'signal': 0},
      {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correctkey': 'right', 'signal': 0},
      {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correctkey': 'left', 'signal': 0},
      {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correctkey': 'right', 'signal': 0},
      {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correctkey': 'left', 'signal': 0},
      {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correctkey': 'right', 'signal': 0},
      {'go_file': 'go_left.png', 'stop_file': 'stop_2.png', 'correctkey': 'left', 'signal': 1},
      {'go_file': 'go_right.png', 'stop_file': 'stop_2.png', 'correctkey': 'right', 'signal': 1}]
    Routine TRIAL_SST
    Routine FEEDBACK
  LoopTerminator Loop_practice
  Routine BEGIN_EXP
  LoopInitiator Loop_blocchi loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = nb_blocks
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    LoopInitiator loop_trials loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 4
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      conditions:
        [{'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correctkey': 'left'},
        {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correctkey': 'right'},
        {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correctkey': 'left'},
        {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correctkey': 'right'},
        {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correctkey': 'left'},
        {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correctkey': 'right'},
        {'go_file': 'go_left.png', 'stop_file': 'stop_1.png', 'correctkey': 'left'},
        {'go_file': 'go_right.png', 'stop_file': 'stop_1.png', 'correctkey': 'right'},
        {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correctkey': 'left'},
        {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correctkey': 'right'},
        {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correctkey': 'left'},
        {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correctkey': 'right'},
        {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correctkey': 'left'},
        {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correctkey': 'right'},
        {'go_file': 'go_left.png', 'stop_file': 'stop_2.png', 'correctkey': 'left'},
        {'go_file': 'go_right.png', 'stop_file': 'stop_2.png', 'correctkey': 'right'}]
      Routine TRIAL_SST
    LoopTerminator loop_trials
    Routine BREAK
  LoopTerminator Loop_blocchi
  Routine THANKS
